R8O2IM01C15;Y0Z0;SPAD=18cm;SAD=36cm                                             #!GUI1.0
0
/home/beamuser/egsnrc_mp/dosxyznrc/clinical/cup_egsphant/R8O2IM01C15_Y0Z0.egsphant
0.7, 0.01, 0
1, 0, 1, 
2, 8, 0, 0, 0, -36, 18, 180, 0, 180, 0, 0, 0
0, 72, 0.000000, 359.000000, 360, 1
0, 71, 0.027778, 359.027778, 360, 1
0, 70, 0.055556, 359.055556, 360, 1
0, 69, 0.083334, 359.083334, 360, 1
0, 68, 0.111112, 359.111112, 360, 1
0, 67, 0.138890, 359.138890, 360, 1
0, 66, 0.166668, 359.166668, 360, 1
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2, 2, 0, 20, 1, 20, 20, 20
/home/beamuser/egsnrc_mp/BEAM_S5/C15.egsphsp1
200000000, 0, 99, 97, 33, 8, 1, 0, 1, 0, , -1, 0, 0, 1, 0
 #########################
 :Start MC Transport Parameter:
 
 Global ECUT= 0.7
 Global PCUT= 0.01
 Global SMAX= 5
 ESTEPE= 0.25
 XIMAX= 0.5
 Boundary crossing algorithm= PRESTA-I
 Skin depth for BCA= 0
 Electron-step algorithm= PRESTA-II
 Spin effects= On
 Brems angular sampling= KM
 Brems cross sections= BH
 Bound Compton scattering= On
 Compton cross sections= default
 Pair angular sampling= Simple
 Pair cross sections= BH
 Photoelectron angular sampling= On
 Rayleigh scattering= On
 Atomic relaxations= On
 Electron impact ionization= Off
 Photon cross-sections output= Off
 
 :Stop MC Transport Parameter:
 #########################
